PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','down','right','up'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember, choose the colour of the word, ignoring the word.

        left: red
        down: green
        right: blue
        up: yellow

        Press any key to continue
    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank500
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code
      Code Type = Auto->JS
  Routine EndExp
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating!
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  Routine reset30s
  Routine Code
    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import os
        import numpy as np
        import random
        import glob
        import random

        def read_files(master_path):
            wav_files = glob.glob(master_path + '*.wav')
            files = []
            for file in wav_files:
                file = file.split('/')[-1]
                files.append(file)
            return files

        def gen_seq(files, master_path, shifted_path):
            paths = np.array([])
            for fp in files:
                master = master_path + fp
                paths = np.append(paths, master)
                shifted = shifted_path + fp.split('.')[0] + '_shifted.wav'
                paths = np.append(paths, shifted)
            # Randomize the sequence
            print (paths)
            paths = seq_randomizer(paths)
            print (paths)
            # Add 'N' randomly
            paths = list(paths)
            paths.insert(random.randint(0,3), 'N')
            print (paths)
            return paths

        def seq_randomizer(paths):
            # First arrange in abab
            paths[[1, 2]] = paths[[2, 1]]
            paths = distribute_within(paths)
            return paths

        def distribute_within(paths):
            """
            Cases:
            1. i == 0: ABAbBb
            2. i == 1: AbBABb
            3. i == 2: ABbAbB
            4. i == 3: AbBbAB
            """
            i = random.randint(0, 3)
            if i == 0:
                paths = paths
            elif i == 1:
                paths[[0, 2]] = paths[[2, 0]]
            elif i == 2:
                paths[[1, 3]] = paths[[3, 1]]
            else:
                paths[[0, 2]] = paths[[2, 0]]
                paths[[1, 3]] = paths[[3, 1]]
            return paths

        master_path = 'audio/master/'
        shifted_path = 'audio/shifted/'
        all_files = read_files(master_path)

        # File index for tracking condition
        index = 0

        # Select 2 files
        files = random.sample(all_files, 2)

        # Generate random sequence and relative path array
        sequence = gen_seq(files, master_path, shifted_path)
        np.savetxt('sequence.txt', np.array(sequence), fmt='%s')
  Routine playSong
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        seq = sequence[index]
        if seq != 'N':
            background_sound = sound.Sound(seq)
            background_sound.play()
        else:
            print ("No music this time!")
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Attempt in 5 seconds
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  Routine endSong
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if seq !='N':
            background_sound.stop()
        else:
            pass
        index += 1
    TextComponent Reset
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = 30s before you get ready for the next attempt.
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  Routine WelcMsg
    TextComponent Welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hi!

        Welcome to the Stroop test.

        You will be shown a list of words that are printed in a different or same color than the meaning of the word. You are tasked with naming the color of the word, not the word itself, as fast as you can.

        You will input the answers by your arrow keys. The mapping is shown on the next screen.

        Press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Code
  Routine WelcMsg
  Routine Instructions
  Routine blank500
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine playSong
    LoopInitiator loops loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'word': 'red', 'color': 'red', 'congruent': 1, 'corrAns': 'left'},
        {'word': 'red', 'color': 'green', 'congruent': 0, 'corrAns': 'down'},
        {'word': 'red', 'color': 'blue', 'congruent': 0, 'corrAns': 'right'},
        {'word': 'red', 'color': 'yellow', 'congruent': 0, 'corrAns': 'up'},
        {'word': 'green', 'color': 'red', 'congruent': 0, 'corrAns': 'left'},
        {'word': 'green', 'color': 'green', 'congruent': 1, 'corrAns': 'down'},
        {'word': 'green', 'color': 'blue', 'congruent': 0, 'corrAns': 'right'},
        {'word': 'green', 'color': 'yellow', 'congruent': 0, 'corrAns': 'up'},
        {'word': 'blue', 'color': 'red', 'congruent': 0, 'corrAns': 'left'},
        {'word': 'blue', 'color': 'green', 'congruent': 0, 'corrAns': 'down'},
        {'word': 'blue', 'color': 'blue', 'congruent': 1, 'corrAns': 'right'},
        {'word': 'blue', 'color': 'yellow', 'congruent': 0, 'corrAns': 'up'},
        {'word': 'yellow', 'color': 'red', 'congruent': 0, 'corrAns': 'left'},
        {'word': 'yellow', 'color': 'green', 'congruent': 0, 'corrAns': 'down'},
        {'word': 'yellow', 'color': 'blue', 'congruent': 0, 'corrAns': 'right'},
        {'word': 'yellow', 'color': 'yellow', 'congruent': 1, 'corrAns': 'up'}]
      Routine trial
      Routine blank500
    LoopTerminator loops
    Routine endSong
  LoopTerminator trials
  Routine EndExp
